PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent animal_image
      image [set every repeat] = $imageFile
      size = (1.0, 1.0)
      startVal [time (s)] = $startImage
      stopVal [duration (s)] = $tImage
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    ImageComponent mask_image
      image [set every repeat] = $maskFile
      size = (1.0, 1.0)
      startVal [time (s)] = $startMask
      stopVal [duration (s)] = $tMask
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  Routine feedback
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    CodeComponent rt_fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Provide feedback on the response time of a key response
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"

        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 17 and 18.
        # 2. dedent line 16

        fb_text = 'no key_resp component found - look at the Std out window for info'


        try:
            fb_text = 'RT: ' + str(round(key_resp.rt*1000)/1000) + ' seconds'#multiplying and dividing by 1000 for online compatibility (Math.Round in JS rounds to the nearest integer rather than rounding floats to a decimal place)
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n2. that data is set to store from first or last key')
    ButtonComponent snake_button
      anchor = top-right
      bold = True
      borderColor = black
      borderWidth = 0.2
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.05, -0.05)
      size = (0.5, 0.3)
      startVal [time (s)] = 0
      text = Snake
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    ButtonComponent spider_button
      anchor = top-left
      bold = True
      borderColor = black
      borderWidth = 0.2
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.05, -0.05)
      size = (0.5, 0.3)
      startVal [time (s)] = 0
      text = Spider
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    ButtonComponent bird_button
      anchor = bottom-right
      bold = True
      borderColor = black
      borderWidth = 0.2
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.05, 0.05)
      save = last click
      size = (0.5, 0.3)
      startVal [time (s)] = 0
      text = Bird
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    ButtonComponent butterfly_button
      anchor = bottom-left
      bold = True
      borderColor = black
      borderWidth = 0.2
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.05, 0.05)
      save = first click
      size = (0.5, 0.3)
      startVal [time (s)] = 0
      text = Butterfly
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  Routine feedback_2
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = ('nothing', 'bad guess', 'good guess', 'certain')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4)
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  Routine intro
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    TextComponent intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be shown an image of an animal. You will then be asked:

        1. Which animal did you see – either a butterfly, a bird, a spider, or a snake;

        2. What level of confidence do you have in your answer.


        Try to respond as quickly and as accurately as possible.


        Press any key when you are ready to proceed.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'imageFile': 'snake1.jpg', 'correctAnswer': 'snake', 'maskFile': 'snake2.jpg', 'tImage': 0.012, 'tMask': 0.282, 'startImage': 1, 'startMask': 1.012}]
    conditionsFile = calibrate.xlsx
    loopType = random
    nReps = 1
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    Routine trial
    Routine feedback
    Routine feedback_2
  LoopTerminator trials
